'=============================
'   ALERT2 Protocol Subroutines
'=============================

Sub Send_to_AL200(hexStr as String * 256 )
  Dim i As Long, n As Long
  Dim Chunk As String * 2
  If (Len(hexStr) Mod 2) <> 0 Then
    Exit Sub
  EndIf
  n = Len(hexStr) / 2
  Dim TempArr(37) As Long
  If n > 512 Then n = 512
  For i = 1 To Len(hexStr) Step 2
    Chunk = Mid(hexStr, i, 2)
    TempArr((i+1)/2) = HexToDec(Chunk)
    If Test_RS232
      SerialOut(ALERT2_COM, Chunk, "", 0, 0)
    Else
      SerialOutBlock(ALERT2_COM, HexToDec(Chunk), 1)
    'SerialOut(ALERT2_COM, CHR(10) & CHR(13), "", 0, 0)
    EndIf

  Next i
  'SerialOutBlock(ALERT2_COM, TempArr, n)
EndSub

Sub Send_Event_IND(SensorData As String * 256)
  'SensorData: caller-built type-01 sensor payload for general sensors (Radar, Bubbler, etc.).
  'Build it conditionally in the caller based on which flags are set.
  'Tipping bucket (type-02) report is built internally here since it needs Tip_Timestamps.

  Dim Header As String * 48
  Dim Parameter As String * 48
  Dim Packet As String * 256
  Dim ReportHeader As String * 48
  Dim Report As String * 256
  Dim Precip_Report As String * 256
  Dim GH_Report As String * 256
  Dim ReportAddress As Long
  Dim c As Long
  Dim time_offsets As String * 124
  Dim IND_time As Long
  Dim IND_TimeStamp As String * 24
  Dim precip_value_hex As String * 64
  Dim source_address As String
  Dim address_as_byte As String
  Dim i As Long
  Dim AL2_Precip_Val As Long

  c = 0
  time_offsets = ""

  RealTime(dt())
  IND_TimeStamp = dt(1) & "-" & dt(2) & "-" & dt(3) & " " & dt(4) & ":" & dt(5) & ":" & dt(6)
  IND_time = SecsSince1990(IND_TimeStamp, 4)

  If Test_Alert
    ReportAddress = TestStationID
  Else
    ReportAddress = StationID
  EndIf

  Header = AL2_Prefix & "{packet_length}"

  'Sets Address
  Parameter = "0A{parameter_length}"
  source_address = "18{address_length}"
  address_as_byte = IntToHexStr(ReportAddress)
  source_address = Replace(source_address, "{address_length}", ByteLength(address_as_byte))
  source_address = source_address & address_as_byte
  Parameter = Parameter & source_address
  Parameter = Replace(Parameter, "{parameter_length}", ByteLength(source_address))

  ReportHeader = "00{full_report_length}"

  'Type-02 tipping bucket report (built internally — requires Tip_Timestamps)
  If Precip_Flag
    Report = "{sensor_id}1{value_len}{value}{time_offsets}"
    Report = Replace(Report, "{sensor_id}", PrecipID)
    For i = 1 To 60
      If Tip_Timestamps(i) > 0
        c += 1
        time_offsets = time_offsets & IntToHexStr(IND_time - Tip_Timestamps(i))
      EndIf
    Next i
    Report = Replace(Report, "{value_len}", c)
    Report = Replace(Report, "{time_offsets}", time_offsets)

    If Test_Alert
      AL2_Precip_Val = Test_Precip_Tips
    Else
      AL2_Precip_Val = Precip_Tips
    EndIf
    precip_value_hex = IntToHexStr(AL2_Precip_Val)

    While Len(precip_value_hex) / 2 <> c
      precip_value_hex = "00" & precip_value_hex
    Wend
    Report = Replace(Report, "{value}", precip_value_hex)
    Precip_Report = "02" & ByteLength(Report) & Report
  Else
    Precip_Report = ""
  EndIf

  'Type-01 general sensor report from caller-provided data
  If Len(SensorData) > 0
    GH_Report = "01" & ByteLength(SensorData) & SensorData
  Else
    GH_Report = ""
  EndIf

  'Combine reports
  Report = "70" & Precip_Report & GH_Report
  ReportHeader = Replace(ReportHeader, "{full_report_length}", ByteLength(Report))
  Packet = Parameter & ReportHeader & Report
  Header = Replace(Header, "{packet_length}", ByteLength(Packet))
  Packet = Header & Packet
  AL2_IND = Packet
  Last_Sent_IND = "Event"

  CallTable(ALERT2_Table)
  Call Send_to_AL200(Packet)
  Call Clear_Tip_Time
  Precip_Flag = False
  Radar_Flag = False
  Bubbler_Flag = False
EndSub

Sub Send_Timed_IND(SensorData As String * 256)
  'SensorData: caller-built type-01 sensor payload (concatenation of SensorReport() calls).
  'Add or remove sensors in BuildSensorData() in Cr350_Alert.CRB.

  Dim Header As String * 48
  Dim Parameter As String * 48
  Dim Packet As String * 256
  Dim ReportHeader As String * 48
  Dim Report As String * 256
  Dim ReportAddress As Long
  Dim source_address As String
  Dim address_as_byte As String
  Dim report_length As String

  If Test_Alert
    ReportAddress = TestStationID
  Else
    ReportAddress = StationID
  EndIf

  Header = AL2_Prefix & "{packet_length}"

  'Sets Address
  Parameter = "0A{parameter_length}"
  source_address = "18{address_length}"
  address_as_byte = IntToHexStr(ReportAddress)
  source_address = Replace(source_address, "{address_length}", ByteLength(address_as_byte))
  source_address = source_address & address_as_byte
  Parameter = Parameter & source_address
  Parameter = Replace(Parameter, "{parameter_length}", ByteLength(source_address))

  'Build type-01 general sensor report from caller-provided data
  ReportHeader = "00{full_report_length}"
  report_length = ByteLength(SensorData)
  Report = "01{report_length}" & SensorData
  Report = Replace(Report, "{report_length}", report_length)
  Report = "70" & Report '70 control byte must wrap report length
  ReportHeader = Replace(ReportHeader, "{full_report_length}", ByteLength(Report))

  Packet = Parameter & ReportHeader & Report
  Header = Replace(Header, "{packet_length}", ByteLength(Packet))
  Packet = Header & Packet
  AL2_IND = Packet
  Last_Sent_IND = "Timed"

  CallTable(ALERT2_Table)
  Call Send_to_AL200(Packet)

EndSub
